/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "firewire-protocol": "sequential-read-write"
        //,"port": "udp"
    }
    ,
    "arms":
    [
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "32653"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "36370"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM3"
        }
    ]
}
