/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        //, "watchdog-timeout": 0.04 // in seconds
        //, "firewire-protocol": "broadcast-read-write"
        , "firewire-protocol": "sequential-read-write"
        //,"port": "udp"
    }
    // ,
    // "operator-present": {
    //     "io": "io/sawRobotIO1394-MTMR-dv-head-sensor.xml"
    // }
    // ,
    // "endoscope-focus": {
    //     "io": "io/sawRobotIO1394-MTML-dv-endoscope-focus.xml"
    // }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "23959",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "29996",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        // ,
        // {
        //     "name": "ECM",
        //     "type": "ECM",
        //     "serial": "27351",
        //     "base-frame": {
        //         "component": "SUJ",
        //         "interface": "ECM"
        //     }
        // }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "36370",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "33100",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
    ]
    // ,
    // "ecm-teleop":
    // {
    //     "mtm-left": "MTML",
    //     "mtm-right": "MTMR",
    //     "ecm": "ECM"
    // }
}
