/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "firewire-protocol": "sequential-read-write"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTMR-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "25975"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "36370"
            // ,
            // "base-frame": {
            //     "reference-frame": "HRSV",
            //     "transform": [[ -1.0,  0.0,          0.0,         -0.180],
            //                   [  0.0,  0.866025404,  0.5,          0.400],
            //                   [  0.0,  0.5,         -0.866025404,  0.475],
            //                   [  0.0,  0.0,          0.0,          1.0]]
            // }
            ,
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  1.0,          0.0,          0.400],
                              [  0.0,  0.0,          1.0,          0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "33100"
            // ,
            // "base-frame": {
            //     "reference-frame": "HRSV",
            //     "transform": [[ -1.0,  0.0,          0.0,          0.180],
            //                   [  0.0,  0.866025404,  0.5,          0.400],
            //                   [  0.0,  0.5,         -0.866025404,  0.475],
            //                   [  0.0,  0.0,          0.0,          1.0]]
            // }
            ,
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  1.0,          0.0,          0.400],
                              [  0.0,  0.0,          1.0,          0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
