/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": 
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "firewire-protocol": "sequential-read-write",
        "watchdog-timeout": 0.05,
        "period": 0.001
        //, "firewire-protocol": "broadcast-read-write"
        //"port": "udp"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTMR-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "25975",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "32653",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
    ]
}
