/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": 
    {
        //"footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        "watchdog-timeout": 0.05
        //, "firewire-protocol": "sequential-read-write"
        //, "firewire-protocol": "broadcast-read-write"
        //"port": "udp"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "23959",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
    ]
}
