/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": 
    {
        // "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        "firewire-protocol": "sequential-read-broadcast-write",
        "period": 0.001,
        "watchdog-timeout": 0.05
        //, "firewire-protocol": "broadcast-read-write"
        //"port": "udp"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "25975",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "29996",
            "system": "wpi-triad",
            "arm": "PSM2-29996-Custom.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
    ]
}
